macro "Add Multiple Lines of Fancy Text To Image" {
	/* This macro adds multiple lines of text to a copy of the image.
		Peter J. Lee Applied Superconductivity Center at National High Magnetic Field Laboratory.
		ANSI encoded for Windows.
		Version v170411 removes spaces in New image names to fix issue with new combination images.
		v180306 cosmetic changes to text.
		v180308 added non-destructive overlay option (overlay can be saved in TIFF header).
		v180611 Fixed stack labeling and fixed overlay.
		v180618	Added restore selection option (useful for multiple slices) and fixed label vertical location for selected options.
		v180626-8 Added text justification, added fit-to-selection, fixed override of previously selected area and added and more symbols
		v180629 Added ability to import metadata from list. v180702 Added progress bar for multiple slices.
		v180803 Can have line rotated to match angle of select-line or any arbitrary angle.
		v180809 Fixed bugs introduced in v180803. Added text above line option. Added "flatten" option to embed line selection.
		v181207 "Replace overlay" now replaces All overlays (so be careful).
		v181214 Overlay fonts on BW images can now be in color. Overlay shadow now works as expected.
		v190108 Overlay shadow now set to be always darker than background (except for "glow").
	 */
	requires("1.47r");
	saveSettings;
	getPixelSize(unit, pixWidth, pixHeight, pixDepth);
	selEType = selectionType;
	scaledLineAngle = 0;
	if (selEType>=0) {
		selectionExists = true;
		if (selEType>=5 && selEType<=7) {
			line = true;
			if (selEType>5) {
				/*  for 6=segmented line or 7=freehand line do a linear fit */
				getSelectionCoordinates(xPoints, yPoints);
				Array.getStatistics(xPoints, orSelEX1, orSelEX2, null, null);
				Fit.doFit("Straight Line", xPoints, yPoints);
				orSelEY1 = Fit.f(orSelEX1);
				orSelEY2 = Fit.f(orSelEX2);
			}
			else getLine(orSelEX1, orSelEY1, orSelEX2, orSelEY2, selLineWidth);
			x1=orSelEX1*pixWidth; y1=orSelEY1*pixHeight; x2=orSelEX2*pixWidth; y2=orSelEY2*pixHeight; 
			scaledLineAngle = getAngle(x1, y1, x2, y2);
			scaledLineLength = sqrt((x2-x1)*(x2-x1)+(y2-y1)*(y2-y1));
			orSelEX = minOf(orSelEX1, orSelEX2);
			orSelEY = minOf(orSelEY1, orSelEY2);
			orSelEWidth = abs(orSelEX2-orSelEX1);
			orSelEHeight = abs(orSelEY2-orSelEY1);
			selLineLength = sqrt(orSelEWidth*orSelEWidth+orSelEHeight*orSelEHeight);
		}
		else {
			line = false;
			getSelectionBounds(orSelEX, orSelEY, orSelEWidth, orSelEHeight);
		}
	}
	else {
		selectionExists = false;
		line = false;
	}	
	originalImage = getTitle();
	/*	Set options for black objects on white background as this works better for publications */
	run("Options...", "iterations=1 white count=1"); /* Set the background to white */
	run("Colors...", "foreground=black background=white selection=yellow"); /* Set the preferred colors for these macros */
	setOption("BlackBackground", false);
	run("Appearance...", " "); /* do not use Inverting LUT *
	/* Check to see if a Ramp legend rather than the image has been selected by accident */
	if (matches(originalImage, ".*Ramp.*")==1) showMessageWithCancel("Title contains \"Ramp\"", "Do you want to label" + originalImage + " ?"); 
	setBatchMode(true);
	getDimensions(imageWidth, imageHeight, channels, slices, frames);
	getPixelSize(unit, pixelWidth, pixelHeight);
	startSliceNumber = getSliceNumber();
	remSlices = slices-startSliceNumber;
	imageDims = imageHeight + imageWidth;
	originalImageDepth = bitDepth();
	if (originalImageDepth==16) {
		Dialog.create("Bit depth conversion");
		Dialog.addMessage("Sorry, this macro does not work well with 16-bit images./nBut perhaps a labelled 16-bit image is unnecessary?");
		conversionChoice = newArray("RGB Color", "8-bit Gray", "Exit");
		Dialog.addRadioButtonGroup("Choose:", conversionChoice, 3, 1, "8-bit Gray");
		Dialog.show();
		convertTo = Dialog.getRadioButton();
		if (convertTo=="8-bit Gray") run("8-bit");
		else if (convertTo=="RGB Color") run("RGB Color");
		else restoreExit("Goodbye");
	}
	id = getImageID();
	fontSize = round(imageDims/50); /* default font size */
	if (fontSize < 10) fontSize = 10; /* set minimum default font size as 10 */
	lineSpacing = 1.1;
	outlineStroke = 7; /* default outline stroke: % of font size */
	shadowDrop = 10;  /* default outer shadow drop: % of font size */
	dIShO = 5; /* default inner shadow drop: % of font size */
	shadowDisp = shadowDrop;
	shadowBlur = floor(0.6 * shadowDrop);
	shadowDarkness = 50;
	innerShadowDrop = dIShO;
	innerShadowDisp = dIShO;
	innerShadowBlur = floor(dIShO/2);
	innerShadowDarkness = 16;
	offsetX = round(1 + imageWidth/150); /* default offset of label from edge */
	offsetY = round(1 + imageHeight/150); /* default offset of label from edge */
	textRot = 0;
	textAboveLine = false;
		
	/* Then Dialog . . . */
	Dialog.create("Basic Label Options");
		if (Overlay.size==0) overwriteChoice = newArray("Destructive overwrite", "New image", "Add overlays");
		else overwriteChoice = newArray("Destructive overwrite", "New image", "Add overlays", "Replace All overlays");
		Dialog.setInsets(-140, 280, 0); /* top, left, bottom */
		Dialog.addRadioButtonGroup("Output choices:", overwriteChoice, 1, 3, overwriteChoice[2]);
		if (selectionExists) {
			textLocChoices = newArray("Top Left", "Top Right", "Center", "Bottom Left", "Bottom Right", "Center of New Selection", "Center of Selection"); 
			loc = 6;
		} else {
			textLocChoices = newArray("Top Left", "Top Right", "Center", "Bottom Left", "Bottom Right", "Center of New Selection"); 
			loc = 2;
		}
		Dialog.addChoice("Location of Summary:", textLocChoices, textLocChoices[loc]);
		if (selectionExists) {
			Dialog.addNumber("Original selection X start = ", orSelEX);
			Dialog.addNumber("Original selection Y start = ", orSelEY);
			Dialog.addNumber("Original selection width = ", orSelEWidth);
			Dialog.addNumber("Original selection height = ", orSelEHeight);
			if (selEType==0 || selEType==1 || selEType==5 || selEType==6 || selEType==7) {
				Dialog.setInsets(-33, 360, 0);
				// Dialog.addToSameRow() ;
				Dialog.addCheckbox("Restore this selection at macro completion?", true);
			} else restoreSelection = false;
			// if (selEType>=5 && selEType<=7)	Dialog.addCheckbox("Draw straight line on image?", true);
			if (orSelEX<imageWidth*0.4) just = "left";
			else if (orSelEX>imageWidth*0.6) just = "right";
			else just = "center";
			if (selEType>=5 && selEType<=7) {
				if (scaledLineAngle<0 && scaledLineAngle>-180) textRot = 180-scaledLineAngle;
				else if (scaledLineAngle>180) textRot = 360-scaledLineAngle;
				// if (textRot>180) textRot-=180; /* it is assumed that upside-down is undesirable */
				Dialog.addNumber("Text Rotation Angle = ", textRot);
				Dialog.setInsets(-33, 360, 0);
				Dialog.addMessage("Note: Rotated text may not be pretty.");
				Dialog.setInsets(0, 240, 0);
				Dialog.addCheckbox("1st line of text above line", true);
			}	
		}
		else restoreSelection = false;

		textJustChoices = newArray("auto", "left", "center", "right");
		// Dialog.setInsets(-35, 280, 0); /* top, left, bottom */
		if (selectionExists) Dialog.addChoice("Text justification, Auto = " + just, textJustChoices, textJustChoices[0]);
		else Dialog.addChoice("Text justification", textJustChoices, textJustChoices[0]);
		Dialog.addNumber("Default font size:", fontSize);
		fontStyleChoice = newArray("bold", "bold antialiased", "italic", "italic antialiased", "bold italic", "bold italic antialiased", "unstyled");
		Dialog.addChoice("Font style:", fontStyleChoice, fontStyleChoice[1]);
		fontNameChoice = getFontChoiceList();
		Dialog.addChoice("Font name:", fontNameChoice, fontNameChoice[0]);
		colorChoice = newArray("white", "black", "off-white", "off-black", "light_gray", "gray", "dark_gray", "red", "pink", "green", "blue", "yellow", "orange", "garnet", "gold", "aqua_modern", "blue_accent_modern", "blue_dark_modern", "blue_modern", "gray_modern", "green_dark_modern", "green_modern", "orange_modern", "pink_modern", "purple_modern", "jazzberry_jam", "red_N_modern", "red_modern", "tan_modern", "violet_modern", "yellow_modern", "Radical Red", "Wild Watermelon", "Outrageous Orange", "Atomic Tangerine", "Neon Carrot", "Sunglow", "Laser Lemon", "Electric Lime", "Screamin' Green", "Magic Mint", "Blizzard Blue", "Shocking Pink", "Razzle Dazzle Rose", "Hot Magenta");
		grayChoice = newArray("white", "black", "light_gray", "gray", "dark_gray");
		if (originalImageDepth==24) Dialog.addChoice("Line color:", colorChoice, colorChoice[2]);
		else {
			Dialog.addChoice("Destructive text gray choices:", grayChoice, grayChoice[0]);
			Dialog.addChoice("Overlay Text color choices:", colorChoice, colorChoice[0]);
		}
		if (originalImageDepth==24) Dialog.addChoice("Outline (background) color:", colorChoice, colorChoice[2]);
		else {
			Dialog.addChoice("Destructive text outline gray choices:", grayChoice, grayChoice[1]);
			Dialog.addChoice("Overlay text outline color choices:", colorChoice, colorChoice[1]);
		}		
		Dialog.setInsets(5, 280, 5); /* top, left, bottom */
		Dialog.addMessage("\"^2\" & \"um\" etc. replaced by " + fromCharCode(178) + " & " + fromCharCode(181) + "m etc. If the units are in the parameter label, within \(...\) i.e. \(unit\) they will override this\nselection. \"degreeC\" will be replaced with " + fromCharCode(0x00B0)+fromCharCode(0x2009) + "C, \"degrees\" by " + fromCharCode(0x00B0)+", \"symbol-Greek letter\" by the Greek letter, i.e. \"symbol-omega\" \ntranslates to " + fromCharCode(0x03C9) + ",\"symbol-Omega\" to " + fromCharCode(0x03A9) + " and \"symbol->=\" to " + fromCharCode(0x2265) + " etc. Arrows: \"arrow-up\" " + fromCharCode(0x21E7) + " \"arrow-left\" " + fromCharCode(0x21E6) + " etc.");
		textChoiceLines = 8;
		lengthOfDirectory = lengthOf(getInfo("image.directory"));
		if (lengthOfDirectory>57) {
			directorySubstring = substring(getInfo("image.directory"),lengthOfDirectory-57,lengthOfDirectory);
			directorySubstring = "..." + substring(directorySubstring, indexOf(directorySubstring, "\\"));
		}
		else directorySubstring = getInfo("image.directory");
		imageFilename = getInfo("image.filename");
		if(lastIndexOf(imageFilename,".")>0) imageFilenameWOExtension = substring(imageFilename,0,lastIndexOf(imageFilename,"."));
		else imageFilenameWOExtension = imageFilename;
		metaDataChoices1 = newArray("Input left box or select here from this list", getTitle());
		metaDataChoices2 = newArray(getMetadata("Info"), directorySubstring, imageFilename, imageFilenameWOExtension, "pixel width = " +pixelWidth+" "+unit, "Image width = "+imageWidth +" pixels", getInfo("image.subtitle"));
		if (line) {
			lineData = newArray(""+scaledLineLength+" "+unit + ", "+scaledLineAngle+fromCharCode(0x00B0), ""+scaledLineAngle+fromCharCode(0x00B0), ""+scaledLineLength+" "+unit);
			metaDataChoices = Array.concat(metaDataChoices1,lineData,metaDataChoices2);
		}
		else metaDataChoices = Array.concat(metaDataChoices1, metaDataChoices2);
		for (i=0; i<textChoiceLines; i++) {
			Dialog.setInsets(0, -640, 0);
			Dialog.addString("Label line "+(i+1)+":","-blank-", 35);
			Dialog.setInsets(-30, 280, 0); /* top, left, bottom */
			Dialog.addChoice("",metaDataChoices,metaDataChoices[0]);
		}
		Dialog.setInsets(0, 280, 0); /* top, left, bottom */
		Dialog.addRadioButtonGroup("Tweak the Formatting? ", newArray("Yes", "No"), 1, 2, "No");
		Dialog.show();
		
		overWrite = Dialog.getRadioButton();
		textLocChoice = Dialog.getChoice();
		if (selectionExists) {
			selEX =  Dialog.getNumber(); /* Allows user to tweak pre-selection using dialog boxes */
			selEY =  Dialog.getNumber();
			selEWidth =  Dialog.getNumber();
			selEHeight =  Dialog.getNumber();
			restoreSelection = Dialog.getCheckbox();
			if (selEType>=5 && selEType<=7) {
				textRot = Dialog.getNumber();
				textAboveLine = Dialog.getCheckbox;
			}
		}
		just = Dialog.getChoice();
		fontSize =  Dialog.getNumber();
		fontStyle = Dialog.getChoice();
		fontName = Dialog.getChoice();
		if (originalImageDepth==24) fontColor = Dialog.getChoice;
		else {
			desFontGray = Dialog.getChoice();
			ovFontColor = Dialog.getChoice();
			if (endsWith(overWrite,"overlays")) fontColor = ovFontColor;
			else fontColor = desFontGray;
		}
		if (originalImageDepth==24) outlineColor = Dialog.getChoice;
		else {
			desOutlineGray = Dialog.getChoice();
			ovOutlineColor = Dialog.getChoice();
			if (endsWith(overWrite,"overlays")) outlineColor = ovOutlineColor;
			else outlineColor = desOutlineGray;
		}
		textInputLines = newArray(textChoiceLines);
		for (i=0; i<textChoiceLines; i++) {
			textInputLines[i] = Dialog.getString();
			metaChoice = Dialog.getChoice();
			if (metaChoice!="Input left box or select here from this list") textInputLines[i] = metaChoice;
			textInputLines[i] = "" + convertToSymbols(textInputLines[i]); /* Use degree symbol */
		}
		tweakFormat = Dialog.getRadioButton();

	if (startsWith(overWrite,"Replace")) while (Overlay.size!=0) Overlay.remove;
	if (remSlices>0 && !endsWith(overWrite,"overlays")) labelRest = getBoolean("Add the same labels to this and next " + remSlices + " slices?");					
	else labelRest = false;
	if (tweakFormat=="Yes") {	
		Dialog.create("Advanced Formatting Options");
		Dialog.addNumber("Line Spacing", lineSpacing,1,3,"\(default 1\)");
		Dialog.addNumber("Outline Stroke:", outlineStroke,0,3,"% of font size");
		if (endsWith(overWrite,"overlays") || originalImageDepth==24) Dialog.addChoice("Outline (background) color:", colorChoice, outlineColor);
		else Dialog.addChoice("Outline (background) gray:", grayChoice, outlineColor);
		Dialog.addNumber("Shadow Drop: ?", shadowDrop,0,3,"% of font size");
		Dialog.addNumber("Shadow Displacement Right: ?", shadowDisp,0,3,"% of font size");
		Dialog.addNumber("Shadow Gaussian Blur:", shadowBlur,0,3,"% of font size");
		Dialog.addNumber("Shadow Darkness:", shadowDarkness,0,3,"%\(darkest = 100%\)");
		if (!endsWith(overWrite,"overlays")){
			Dialog.addNumber("Inner Shadow Drop: ?", dIShO,0,3,"% of font size");
			Dialog.addNumber("Inner Displacement Right: ?", dIShO,0,3,"% of font size");
			Dialog.addNumber("Inner Shadow Mean Blur:",floor(dIShO/2),1,3,"% of font size");
			Dialog.addNumber("Inner Shadow Darkness:", 20,0,3,"% \(darkest = 100%\)");
		}
	
		Dialog.show();
		lineSpacing = Dialog.getNumber();
		outlineStroke = Dialog.getNumber();
		outlineColor = Dialog.getChoice();
		shadowDrop = Dialog.getNumber();
		shadowDisp = Dialog.getNumber();
		shadowBlur = Dialog.getNumber();
		shadowDarkness = Dialog.getNumber();
		if (!endsWith(overWrite,"overlays")){
			innerShadowDrop = Dialog.getNumber();
			innerShadowDisp = Dialog.getNumber();
			innerShadowBlur = Dialog.getNumber();
			innerShadowDarkness = Dialog.getNumber();
		}
	}
	if (is("Batch Mode")==false) setBatchMode(true);	/* toggle batch mode back on */
	textOutNumber = 0;
	textInputLinesText = newArray(textChoiceLines);
	setFont(fontName, fontSize, fontStyle);
	longestStringWidth = 0;
	for (i=0; i<textChoiceLines; i++) {
		if (textInputLines[i]!="-blank-") {
			textInputLinesText[i] = "" + cleanLabel(textInputLines[i]);
			textOutNumber = i+1; /* This allows you to have blank lines between lines but not at the end */
			if (getStringWidth(textInputLinesText[i])>longestStringWidth) longestStringWidth = getStringWidth(textInputLines[i]);
		}
	}
	if (textOutNumber==0) restoreExit("No text for labels");
	/* Make sure all text fits image width */
	shrinkX = imageWidth/longestStringWidth;
	fontSize = fontSize * minOf(1, shrinkX);	
	longestStringWidth = longestStringWidth * minOf(1, shrinkX);
	/* determine font color intensities settings for antialiased tweak */
	fontColorArray = getColorArrayFromColorName(fontColor);
	Array.getStatistics(fontColorArray,fontIntMean);
	fontInt = floor(fontIntMean);
	outlineColorArray = getColorArrayFromColorName(outlineColor);
	Array.getStatistics(outlineColorArray,outlineIntMean);
	outlineInt = floor(outlineIntMean);
	
	negAdj = 0.5;  /* negative offsets appear exaggerated at full displacement */
	if (shadowDrop<0) shadowDrop *= negAdj;
	if (shadowDisp<0) shadowDisp *= negAdj;
	if (shadowBlur<0) shadowBlur *= negAdj;
	if (innerShadowDrop<0) innerShadowDrop *= negAdj;
	if (innerShadowDisp<0) innerShadowDisp *= negAdj;
	if (innerShadowBlur<0) innerShadowBlur *= negAdj;
	fontFactor = fontSize/100;
	outlineStroke = round(fontFactor * outlineStroke);
	shadowDrop = round(fontFactor * shadowDrop);
	shadowDisp = round(fontFactor * shadowDisp);
	shadowBlur = round(fontFactor * shadowBlur);
	innerShadowDrop = floor(fontFactor * innerShadowDrop);
	innerShadowDisp = floor(fontFactor * innerShadowDisp);
	innerShadowBlur = floor(fontFactor * innerShadowBlur);
	if (offsetX<(shadowDisp+shadowBlur+1)) offsetX = (shadowDisp+shadowBlur+1);  /* make sure shadow does not run off edge of image */
	if (offsetY<(shadowDrop+shadowBlur+1)) offsetY = (shadowDrop+shadowBlur+1);
	if (fontStyle=="unstyled") fontStyle="";
/*  */			
	linesSpace = lineSpacing * textOutNumber * fontSize;
	if (textLocChoice == "Top Left") {
		selEX = offsetX;
		selEY = offsetY;
		if (just=="auto") just = "left";
	} else if (textLocChoice == "Top Right") {
		selEX = imageWidth - longestStringWidth - offsetX;
		selEY = offsetY;
		if (just=="auto") just = "right";
	} else if (textLocChoice == "Center") {
		selEX = round((imageWidth - longestStringWidth)/2);
		selEY = round((imageHeight - linesSpace)/2 + fontSize);
		if (just=="auto") just = "center";
	} else if (textLocChoice == "Bottom Left") {
		selEX = offsetX;
		selEY = imageHeight - (offsetY + linesSpace) + fontSize; 
		if (just=="auto") just = "left";
	} else if (textLocChoice == "Bottom Right") {
		selEX = imageWidth - longestStringWidth - offsetX;
		selEY = imageHeight - (offsetY + linesSpace) + fontSize;
		if (just=="auto") just = "right";
	} else if (textLocChoice == "Center of New Selection"){
		if (is("Batch Mode")==true) setBatchMode(false); /* Does not accept interaction while batch mode is on */
		setTool("rectangle");
		msgtitle="Location for the text labels...";
		msg = "Draw a box in the image where you want to center the text labels...";
		waitForUser(msgtitle, msg);
		getSelectionBounds(orSelEX, orSelEY, orSelEWidth, orSelEHeight); /* this set for restore */
		restoreSelection = getBoolean("Restore this selection at the end of the macro?");
		if (is("Batch Mode")==false) setBatchMode(true);	/* toggle batch mode back on */
		getSelectionBounds(selEX, selEY, selEWidth, selEHeight); /* this set to change */
	}
	if (endsWith(textLocChoice, "election")) {
		shrinkX = minOf(1,selEWidth/longestStringWidth);
		if (line) shrinkY = minOf(1,imageHeight/linesSpace);
		else shrinkY = minOf(1,selEHeight/linesSpace);
		shrinkF = minOf(shrinkX, shrinkY);
		shrunkFont = shrinkF * fontSize;
		if (shrinkF < 1) {
			Dialog.create("Shrink Text");
			Dialog.addCheckbox("Text will not fit inside selection; Reduce font size from " + fontSize+ "?", true);
			Dialog.addNumber("Choose new font size; font size for fit =",round(shrunkFont));
			Dialog.show;
			reduceFontSize = Dialog.getCheckbox();
			shrunkFont = Dialog.getNumber();
			shrinkF = shrunkFont/fontSize;
		}	
		else reduceFontSize = false;
		if (reduceFontSize == true) {
			fontSize = shrunkFont;
			linesSpace = shrinkF * linesSpace;
			longestStringWidth = shrinkF * longestStringWidth;
			fontFactor = fontSize/100;
			if (outlineStroke>1) outlineStroke = maxOf(1,round(fontFactor * outlineStroke));
			else outlineStroke = round(fontFactor * outlineStroke);
			if (shadowDrop>1) shadowDrop = maxOf(1,round(fontFactor * shadowDrop));
			else shadowDrop = round(fontFactor * shadowDrop);
			if (shadowDisp>1) shadowDisp = maxOf(1,round(fontFactor * shadowDisp));
			else shadowDisp = round(fontFactor * shadowDisp);
			if (shadowBlur>1) shadowBlur = maxOf(1,round(fontFactor * shadowBlur));
			else shadowBlur = round(fontFactor * shadowBlur);
			innerShadowDrop = floor(fontFactor * innerShadowDrop);
			innerShadowDisp = floor(fontFactor * innerShadowDisp);
			innerShadowBlur = floor(fontFactor * innerShadowBlur);
		}
		selEX = selEX + round((selEWidth/2) - longestStringWidth/2);
		selEY = selEY + round((selEHeight/2) - (linesSpace/2) + fontSize);
		if (just=="auto") {
			if (selEX<imageWidth*0.4) just = "left";
			else if (selEX>imageWidth*0.6) just = "right";
			else just = "center";
		}
	}
	run("Select None");
	if (selEY<=1.5*fontSize)
		selEY += fontSize;
	if (selEX<offsetX) selEX = offsetX;
	endX = selEX + longestStringWidth;
	if ((endX+offsetX)>imageWidth) selEX = imageWidth - longestStringWidth - offsetX;
	textLabelX = selEX;
	textLabelY = selEY;
	/* Now offset from line for line label */
	if (selEType>=5 && selEType<7 && textAboveLine) {
		textLabelX += round(cos(textRot/(180/PI))*0.75*fontSize);
		textLabelX += round(sin(textRot/(180/PI))*0.75*fontSize);
	}	
	setColorFromColorName("white");
	roiManager("show none");
	// run("Flatten"); /* changes bit depth */
	if (startsWith(overWrite,"New")) {
		if (slices==1) run("Duplicate...", "title=" + getTitle() + "+text");
		else run("Duplicate...", "title=" + getTitle() + "+text duplicate");
	}
	workingImage = getTitle();
	if (is("Batch Mode")==false) setBatchMode(true);	/* toggle batch mode back on */
	textImages = newArray("label_mask","antiAliased");
	if (textRot!=0 || endsWith(overWrite,"verlays")) tIs = 1; /* No-antialiased if text rotated or overlay used */
	else tIs = 2;
	/* Create Label Mask */
	newImage("label_mask", "8-bit black", imageWidth, imageHeight, 1);
	roiManager("deselect");
	run("Select None");
	setFont(fontName,fontSize, fontStyle);
	textLabelLineY = textLabelY;
	if (tIs >1) newImage("antiAliased", originalImageDepth, imageWidth, imageHeight, 1);
	/* Draw text for mask and antialiased tweak */
	for (t=0; t<tIs; t++) {
		selectWindow(textImages[t]);
		if (t==0) setColor("white");
		else {
			run("Select All");
			setColorFromColorName(outlineColor);
			fill();
			roiManager("deselect");
			run("Select None");
			setColorFromColorName(fontColor);
		}
		for (i=0; i<textOutNumber; i++) {
			if (textInputLines[i]!="-blank-") {
				if (just=="left") drawString(textInputLinesText[i], textLabelX, textLabelLineY);
				else if (just=="right") drawString(textInputLinesText[i], textLabelX + (longestStringWidth - getStringWidth(textInputLinesText[i])), textLabelLineY);
				else drawString(textInputLinesText[i], textLabelX + (longestStringWidth-getStringWidth(textInputLinesText[i]))/2, textLabelLineY);
				textLabelLineY += lineSpacing * fontSize;
			}
			else textLabelLineY += lineSpacing * fontSize;
		}
		textLabelLineY = textLabelY;
	}	
	selectWindow("label_mask");
	setThreshold(0, 128);
	setOption("BlackBackground", false);
	run("Convert to Mask");
	if (endsWith(overWrite,"verlays")) {
		selectWindow(originalImage);
		fontColorHex = getHexColorFromRGBArray(fontColor);
		outlineColorHex = getHexColorFromRGBArray(outlineColor);
		run("Select None");
		getSelectionFromMask("label_mask");
		if (textRot!=0) run("Rotate...", "  angle=&textRot");
		getSelectionBounds(selMaskX, selMaskY, selMaskWidth, selMaskHeight);
		setSelectionLocation(selMaskX+shadowDisp, selMaskY+shadowDrop);
		List.setMeasurements ;
		bgGray = List.getValue("Mean");
		List.clear();
		grayHex = toHex(round(bgGray*(100-shadowDarkness)/100));
		shadowHex = "#" + ""+pad(grayHex) + ""+pad(grayHex) + ""+pad(grayHex);
		setSelectionName("Fancy Text Label Shadow");
		Overlay.addSelection(shadowHex, outlineStroke, shadowHex);
		run("Select None");
		getSelectionFromMask("label_mask");
		if (textRot!=0) run("Rotate...", "  angle=&textRot");
		run("Enlarge...", "enlarge=&outlineStroke pixel");
		setSelectionName("Fancy Text Label Outline");
		Overlay.addSelection(outlineColorHex,outlineStroke,outlineColorHex);
		run("Select None");
		if (textRot==0) {
			setColorFromColorName(fontColor);
			textLabelLineY = textLabelY;
			for (t=0; t<textOutNumber; t++) {
				if (textInputLines[t]!="-blank-") {
					if (just=="left") Overlay.drawString(textInputLinesText[t], textLabelX, textLabelLineY);
					else if (just=="right") Overlay.drawString(textInputLinesText[t], textLabelX + (longestStringWidth - getStringWidth(textInputLinesText[t])), textLabelLineY);
					else Overlay.drawString(textInputLinesText[t], textLabelX + (longestStringWidth-getStringWidth(textInputLinesText[t]))/2, textLabelLineY);
					textLabelLineY += lineSpacing * fontSize;					
				}
				else textLabelLineY += lineSpacing * fontSize;
			}
		} else {
			getSelectionFromMask("label_mask");
			run("Rotate...", "angle=&textRot");
			setSelectionName("Fancy Rotated Text");
			Overlay.addSelection(outlineColorHex,outlineStroke,fontColorHex);
		}
		Overlay.show;
	}
	else {
		if (textRot==0) {
			selectWindow("antiAliased");
			getSelectionFromMask("label_mask");
			if (textRot!=0) run("Rotate...", "angle=&textRot");
			run("Make Inverse");
			if (fontInt>=outlineInt) setColorFromColorName("white");
			else setColorFromColorName("black");
			fill();
			run("Select None");
		}
		// selectWindow("label_mask");
		/* Create drop shadow if desired */
		if (shadowDrop!=0 || shadowDisp!=0 || shadowBlur!=0) {
			showStatus("Creating drop shadow for labels . . . ");
			createShadowDropFromMask7("label_mask", shadowDrop, shadowDisp, shadowBlur, shadowDarkness, outlineStroke);
		}
		/*	Create inner shadow if desired */
		if (innerShadowDrop!=0 || innerShadowDisp!=0 || innerShadowBlur!=0) {
			showStatus("Creating inner shadow for labels . . . ");
			createInnerShadowFromMask6("label_mask",innerShadowDrop, innerShadowDisp, innerShadowBlur, innerShadowDarkness);
		}	
		for (s=0; s<remSlices+1; s++) {
			showProgress(-s/remSlices);
			if (isOpen("shadow") && shadowDarkness>0)		
				imageCalculator("Subtract", workingImage,"shadow");
			else if (isOpen("shadow") && shadowDarkness<0)		
				imageCalculator("Add", workingImage,"shadow");
			run("Select None");
			/* Create outline around text */
			selectWindow(workingImage);
			getSelectionFromMask("label_mask");
			if (textRot!=0) run("Rotate...", "angle=&textRot");
			getSelectionBounds(maskX, maskY, null, null);
			outlineStrokeOffset = minOf(round(shadowDisp/2), round(maxOf(0,(outlineStroke/2)-1)));
			setSelectionLocation(maskX+outlineStrokeOffset, maskY+outlineStrokeOffset); /* Offset selection to create shadow effect */
			run("Enlarge...", "enlarge=&outlineStroke pixel");
			setBackgroundFromColorName(outlineColor);
			run("Clear", "slice");
			outlineStrokeOffsetMod = outlineStrokeOffset/2;
			run("Enlarge...", "enlarge=&outlineStrokeOffsetMod pixel");
			run("Gaussian Blur...", "sigma=&outlineStrokeOffsetMod");
			run("Select None");
			/* Create text */
			getSelectionFromMask("label_mask");
			if (textRot!=0) run("Rotate...", "angle=&textRot");
			setBackgroundFromColorName(fontColor);
			run("Clear", "slice");
			run("Select None");
			if (isOpen("antiAliased")) {
				if (fontInt>=outlineInt) imageCalculator("Min",workingImage,"antiAliased");
				else imageCalculator("Max",workingImage,"antiAliased");
			}
			/* Create inner shadow or glow if requested */
			if (isOpen("inner_shadow") && innerShadowDarkness>0)
				imageCalculator("Subtract", workingImage,"inner_shadow");
			else if (isOpen("inner_shadow") && innerShadowDarkness<0)
				imageCalculator("Add", workingImage,"inner_shadow");
			if (labelRest==false) remSlices = 0;
			else run("Next Slice [>]");
		}
	}
	closeImageByTitle("shadow");
	closeImageByTitle("inner_shadow");
	closeImageByTitle("label_mask");
	closeImageByTitle("antiAliased");
	selectWindow(workingImage);
	if (startsWith(overWrite, "New"))  {
		if ((lastIndexOf(originalImage,"."))>0)  workingImageNameWOExt = unCleanLabel(substring(workingImage, 0, lastIndexOf(workingImage,".")));
		else workingImageNameWOExt = unCleanLabel(workingImage);
		rename(workingImageNameWOExt + "+text");
	}
	restoreSettings;
	run("Select None");
	setBatchMode("exit & display");
	if (endsWith(textLocChoice, "election") && (restoreSelection==true)) {
		if (selEType==0) makeRectangle(orSelEX, orSelEY, orSelEWidth, orSelEHeight);
		if (selEType==1) makeOval(orSelEX, orSelEY, orSelEWidth, orSelEHeight);
		if (selEType>=5 && selEType<7) {
			makeLine(orSelEX1, orSelEY1, orSelEX2, orSelEY2);
			if (getBoolean("Create flattened image with line selection")) {
				run("Add Selection..."); /* By adding selection to overlay this also works with the overlay label */
				run("Flatten");
			}
		}
	}
	else run("Select None");
	showStatus("Fancy Text Labels Finished");
	run("Collect Garbage"); 
}
/*  **********  ImageJ Functions  ********** */	
	  
  function getAngle(x1, y1, x2, y2) {
	/* Returns the angle in degrees between the specified line and the horizontal axis.
	https://imagej.nih.gov/ij/macros/Measure_Angle_And_Length.txt
	*/
      q1=0; q2orq3=2; q4=3; /* quadrant */
      dx = x2-x1;
      dy = y1-y2;
      if (dx!=0)
          angle = atan(dy/dx);
      else {
          if (dy>=0)
              angle = PI/2;
          else
              angle = -PI/2;
      }
      angle = (180/PI)*angle;
      if (dx>=0 && dy>=0)
           quadrant = q1;
      else if (dx<0)
          quadrant = q2orq3;
      else
          quadrant = q4;
      if (quadrant==q2orq3)
          angle = angle+180.0;
      else if (quadrant==q4)
          angle = angle+360.0;
      return angle;
  }
	/* 
	( 8(|)   ( 8(|)  ASC and ASC-mod-BAR Functions  ( 8(|)  ( 8(|)
	*/
	function cleanLabel(string) {
		string= replace(string, "\\^2", fromCharCode(178)); /* superscript 2 */
		string= replace(string, "\\^3", fromCharCode(179)); /* superscript 3 UTF-16 (decimal) */
		string= replace(string, "\\^-1", fromCharCode(0x207B) + fromCharCode(185)); /* superscript -1 */
		string= replace(string, "\\^-2", fromCharCode(0x207B) + fromCharCode(178)); /* superscript -2 */
		string= replace(string, "\\^-^1", fromCharCode(0x207B) + fromCharCode(185)); /* superscript -1 */
		string= replace(string, "\\^-^2", fromCharCode(0x207B) + fromCharCode(178)); /* superscript -2 */
		string= replace(string, "(?<![A-Za-z0-9])u(?=m)", fromCharCode(181)); /* micron units */
		string= replace(string, "\\b[aA]ngstrom\\b", fromCharCode(197)); /* Ångström unit symbol */ 
		string= replace(string, "  ", " "); /* Replace double spaces with single spaces */
		string= replace(string, "_", fromCharCode(0x2009)); /* Replace underlines with thin spaces */
		string= replace(string, "px", "pixels"); /* Expand pixel abbreviation */
		string= replace(string, "sigma", fromCharCode(0x03C3)); /* sigma for tight spaces */
		return string;
	}
	function closeImageByTitle(windowTitle) {  /* Cannot be used with tables */
        if (isOpen(windowTitle)) {
		selectWindow(windowTitle);
        close();
		}
	}
	function convertToSymbols(string) {
		/* v180612 first version
			v180627 Expanded, v180803 added "degrees" */
		string= replace(string, "symbol-Angstrom", fromCharCode(0x212B)); /* ANGSTROM SIGN */
		string= replace(string, "symbol-alpha", fromCharCode(0x03B1));
		string= replace(string, "symbol-Alpha", fromCharCode(0x0391));
		string= replace(string, "symbol-beta", fromCharCode(0x03B2)); /* Lower case beta */
		string= replace(string, "symbol-Beta", fromCharCode(0x0392)); /* ß CAPITAL */
		string= replace(string, "symbol-gamma", fromCharCode(0x03B3)); /* MATHEMATICAL SMALL GAMMA */
		string= replace(string, "symbol-Gamma", fromCharCode(0xD835)); /* MATHEMATICAL BOLD CAPITAL  GAMMA */
		string= replace(string, "symbol-delta", fromCharCode(0x1E9F)); /*  SMALL LETTER DELTA */
		string= replace(string, "symbol-Delta", fromCharCode(0x0394)); /*  CAPITAL LETTER DELTA */
		string= replace(string, "symbol-epsilon", fromCharCode(0x03B5)); /* GREEK SMALL LETTER EPSILON */
		string= replace(string, "symbol-Epsilon", fromCharCode(0x0395)); /* GREEK CAPITAL LETTER EPSILON */
		string= replace(string, "symbol-zeta", fromCharCode(0x03B6)); /* GREEK SMALL LETTER ZETA */
		string= replace(string, "symbol-Zeta", fromCharCode(0x0396)); /* GREEK CAPITAL LETTER ZETA */
		string= replace(string, "symbol-theta", fromCharCode(0x03B8)); /* GREEK SMALL LETTER THETA */
		string= replace(string, "symbol-Theta", fromCharCode(0x0398)); /* GREEK CAPITAL LETTER THETA */
		string= replace(string, "symbol-iota", fromCharCode(0x03B9)); /* GREEK SMALL LETTER IOTA */
		string= replace(string, "symbol-Iota", fromCharCode(0x0196)); /* GREEK CAPITAL LETTER IOTA */
		string= replace(string, "symbol-kappa", fromCharCode(0x03BA)); /* GREEK SMALL LETTER KAPPA */
		string= replace(string, "symbol-Kappa", fromCharCode(0x0196)); /* GREEK CAPITAL LETTER KAPPA */
		string= replace(string, "symbol-lambda", fromCharCode(0x03BB)); /* GREEK SMALL LETTER LAMDA */
		string= replace(string, "symbol-Lambda", fromCharCode(0x039B)); /* GREEK CAPITAL LETTER LAMDA */
		string= replace(string, "symbol-mu", fromCharCode(0x03BC)); /* µ GREEK SMALL LETTER MU */
		string= replace(string, "symbol-Mu", fromCharCode(0x039C)); /* GREEK CAPITAL LETTER MU */
		string= replace(string, "symbol-nu", fromCharCode(0x03BD)); /*  GREEK SMALL LETTER NU */
		string= replace(string, "symbol-Nu", fromCharCode( 0x039D)); /*  GREEK CAPITAL LETTER NU */
		string= replace(string, "symbol-xi", fromCharCode(0x03BE)); /* GREEK SMALL LETTER XI */
		string= replace(string, "symbol-Xi", fromCharCode(0x039E)); /* GREEK CAPITAL LETTER XI */
		string= replace(string, "symbol-pi", fromCharCode(0x03C0)); /* GREEK SMALL LETTER Pl */
		string= replace(string, "symbol-Pi", fromCharCode(0x03A0)); /* GREEK CAPITAL LETTER Pl */
		string= replace(string, "symbol-rho", fromCharCode(0x03C1)); /* GREEK SMALL LETTER RHO */
		string= replace(string, "symbol-Rho", fromCharCode(0x03A1)); /* GREEK CAPITAL LETTER RHO */
		string= replace(string, "symbol-sigma", fromCharCode(0x03C3)); /* GREEK SMALL LETTER SIGMA */
		string= replace(string, "symbol-Sigma", fromCharCode(0x03A3)); /* GREEK CAPITAL LETTER SIGMA */
		string= replace(string, "symbol-phi", fromCharCode(0x03C6)); /* GREEK SMALL LETTER PHI */
		string= replace(string, "symbol-Phi", fromCharCode(0x03A6)); /* GREEK CAPITAL LETTER PHI */
		string= replace(string, "symbol-omega", fromCharCode(0x03C9)); /* GREEK SMALL LETTER OMEGA */
		string= replace(string, "symbol-Omega", fromCharCode(0x03A9)); /* GREEK CAPITAL LETTER OMEGA */
		string= replace(string, "symbol-eta", fromCharCode(0x03B7)); /*  GREEK SMALL LETTER ETA */
		string= replace(string, "symbol-Eta", fromCharCode(0x0397)); /*  GREEK CAPITAL LETTER ETA */
		string= replace(string, "symbol-sub2", fromCharCode(0x2082)); /*  subscript 2 */
		string= replace(string, "symbol-sub3", fromCharCode(0x2083)); /*  subscript 3 */
		string= replace(string, "symbol-sub4", fromCharCode(0x2084)); /*  subscript 4 */
		string= replace(string, "symbol-sub5", fromCharCode(0x2085)); /*  subscript 5 */
		string= replace(string, "symbol-sup2", fromCharCode(0x00B2)); /*  superscript 2 */
		string= replace(string, "symbol-sup3", fromCharCode(0x00B3)); /*  superscript 3 */
		string= replace(string, "symbol->=", fromCharCode(0x2265)); /* GREATER-THAN OR EQUAL TO */
		string= replace(string, "symbol-<=", fromCharCode(0x2264)); /* LESS-THAN OR EQUAL TO */
		string= replace(string, "symbol-xx", fromCharCode(0x00D7)); /* MULTIPLICATION SIGN */
		string= replace(string, "symbol-copyright=", fromCharCode(0x00A9)); /* © */
		string= replace(string, "symbol-ro", fromCharCode(0x00AE)); /* registered sign */
		string= replace(string, "symbol-tm", fromCharCode(0x2122)); /* ™ */
		string= replace(string, "symbol-parallelto", fromCharCode(0x2225)); /* PARALLEL TO  note CANNOT use "|" key */
		// string= replace(string, "symbol-perpendicularto", fromCharCode(0x27C2)); /* PERPENDICULAR note CANNOT use "|" key */
		string= replace(string, "symbol-degree", fromCharCode(0x00B0)); /* Degree */
		string= replace(string, "degreeC", fromCharCode(0x00B0)+fromCharCode(0x2009) + "C"); /* Degree + space + C */
		string= replace(string, "degrees", fromCharCode(0x00B0)); /* Degree C */
		string= replace(string, "arrow-up", fromCharCode(0x21E7)); /* 'UPWARDS WHITE ARROW */
		string= replace(string, "arrow-down", fromCharCode(0x21E9)); /* 'DOWNWARDS WHITE ARROW */
		string= replace(string, "arrow-left", fromCharCode(0x21E6)); /* 'LEFTWARDS WHITE ARROW */
		string= replace(string, "arrow-right", fromCharCode(0x21E8)); /* 'RIGHTWARDS WHITE ARROW */
		return string;
	}
	function createInnerShadowFromMask6(mask,iShadowDrop, iShadowDisp, iShadowBlur, iShadowDarkness) {
		/* Requires previous run of: originalImageDepth = bitDepth();
		because this version works with different bitDepths
		v161115 calls four variables: drop, displacement blur and darkness
		v180627 and calls mask label
		v180803	special version for rotated text	*/
		showStatus("Creating inner shadow for labels . . . ");
		newImage("inner_shadow", "8-bit white", imageWidth, imageHeight, 1);
		getSelectionFromMask(mask);
		if (textRot!=0) run("Rotate...", "  angle=&textRot");
		setBackgroundColor(0,0,0);
		run("Clear Outside");
		getSelectionBounds(selMaskX, selMaskY, selMaskWidth, selMaskHeight);
		setSelectionLocation(selMaskX-iShadowDisp, selMaskY-iShadowDrop);
		setBackgroundColor(0,0,0);
		run("Clear Outside");
		getSelectionFromMask(mask);
		if (textRot!=0) run("Rotate...", "angle=&textRot");
		expansion = abs(iShadowDisp) + abs(iShadowDrop) + abs(iShadowBlur);
		if (expansion>0) run("Enlarge...", "enlarge=&expansion pixel");
		if (iShadowBlur>0) run("Gaussian Blur...", "sigma=&iShadowBlur");
		run("Unsharp Mask...", "radius=0.5 mask=0.2"); /* A tweak to sharpen the effect for small font sizes */
		imageCalculator("Max", "inner_shadow",mask);
		run("Select None");
		/* The following are needed for different bit depths */
		if (originalImageDepth==16 || originalImageDepth==32) run(originalImageDepth + "-bit");
		run("Enhance Contrast...", "saturated=0 normalize");
		run("Invert");  /* Create an image that can be subtracted - this works better for color than Min */
		divider = (100 / abs(iShadowDarkness));
		run("Divide...", "value=&divider");
	}
	function createShadowDropFromMask7(mask, oShadowDrop, oShadowDisp, oShadowBlur, oShadowDarkness, oStroke) {
		/* Requires previous run of: originalImageDepth = bitDepth();
		because this version works with different bitDepths
		v161115 calls five variables: drop, displacement blur and darkness
		v180627 adds mask label to variables	
		v180803	special version for rotated text	*/
		showStatus("Creating drop shadow for labels . . . ");
		newImage("shadow", "8-bit black", imageWidth, imageHeight, 1);
		getSelectionFromMask(mask);
		if (textRot!=0) run("Rotate...", "angle=&textRot");
		getSelectionBounds(selMaskX, selMaskY, selMaskWidth, selMaskHeight);
		setSelectionLocation(selMaskX + oShadowDisp, selMaskY + oShadowDrop);
		setBackgroundColor(255,255,255);
		if (oStroke>0) run("Enlarge...", "enlarge=&oStroke pixel"); /* Adjust shadow size so that shadow extends beyond stroke thickness */
		run("Clear");
		run("Select None");
		if (oShadowBlur>0) {
			run("Gaussian Blur...", "sigma=&oShadowBlur");
			run("Unsharp Mask...", "radius=&oShadowBlur mask=0.4"); /* Make Gaussian shadow edge a little less fuzzy */
		}
		/* Now make sure shadow or glow does not impact outline */
		getSelectionFromMask(mask);
		if (textRot!=0) run("Rotate...", "angle=&textRot");
		if (oStroke>0) run("Enlarge...", "enlarge=&oStroke pixel");
		setBackgroundColor(0,0,0);
		run("Clear");
		run("Select None");
		/* The following are needed for different bit depths */
		if (originalImageDepth==16 || originalImageDepth==32) run(originalImageDepth + "-bit");
		run("Enhance Contrast...", "saturated=0 normalize");
		divider = (100 / abs(oShadowDarkness));
		run("Divide...", "value=&divider");
	}
  	function getFontChoiceList() {
		/*	v180723 first version
			v180828 Changed order of favorites
			v190108 Longer list of favorites
		*/
		systemFonts = getFontList();
		IJFonts = newArray("SansSerif", "Serif", "Monospaced");
		fontNameChoice = Array.concat(IJFonts,systemFonts);
		faveFontList = newArray("Your favorite fonts here", "Open Sans ExtraBold", "Fira Sans ExtraBold", "Arial Black", "Montserrat Black", "Lato Black", "Roboto Black", "Tahoma Bold", "Calibri Bold", "Helvetica", "SansSerif", "Calibri", "Roboto", "Roboto Bk", "Tahoma", "Merriweather Black", "Alegreya Black", "Times New Roman Bold", "Times Bold", "Calisto MT Bold", "Book Antiqua Bold", "Roboto Slab", "Serif");
		faveFontListCheck = newArray(faveFontList.length);
		counter = 0;
		for (i=0; i<faveFontList.length; i++) {
			for (j=0; j<fontNameChoice.length; j++) {
				if (faveFontList[i] == fontNameChoice[j]) {
					faveFontListCheck[counter] = faveFontList[i];
					counter +=1;
					j = fontNameChoice.length;
				}
			}
		}
		faveFontListCheck = Array.trim(faveFontListCheck, counter);
		fontNameChoice = Array.concat(faveFontListCheck,fontNameChoice);
		return fontNameChoice;
	}
	function getSelectionFromMask(selection_Mask){
		tempTitle = getTitle();
		selectWindow(selection_Mask);
		run("Create Selection"); /* Selection inverted perhaps because the mask has an inverted LUT? */
		run("Make Inverse");
		selectWindow(tempTitle);
		run("Restore Selection");
	}
	function getColorArrayFromColorName(colorName) {
		/* v180828 added Fluorescent Colors
		   v181017-8 added off-white and off-black for use in gif transparency and also added safe exit if no color match found
		*/
		if (colorName == "white") cA = newArray(255,255,255);
		else if (colorName == "black") cA = newArray(0,0,0);
		else if (colorName == "off-white") cA = newArray(245,245,245);
		else if (colorName == "off-black") cA = newArray(10,10,10);
		else if (colorName == "light_gray") cA = newArray(200,200,200);
		else if (colorName == "gray") cA = newArray(127,127,127);
		else if (colorName == "dark_gray") cA = newArray(51,51,51);
		else if (colorName == "off-black") cA = newArray(10,10,10);
		else if (colorName == "light_gray") cA = newArray(200,200,200);
		else if (colorName == "gray") cA = newArray(127,127,127);
		else if (colorName == "dark_gray") cA = newArray(51,51,51);
		else if (colorName == "red") cA = newArray(255,0,0);
		else if (colorName == "pink") cA = newArray(255, 192, 203);
		else if (colorName == "green") cA = newArray(0,255,0); /* #00FF00 AKA Lime green */
		else if (colorName == "blue") cA = newArray(0,0,255);
		else if (colorName == "yellow") cA = newArray(255,255,0);
		else if (colorName == "orange") cA = newArray(255, 165, 0);
		else if (colorName == "garnet") cA = newArray(120,47,64);
		else if (colorName == "gold") cA = newArray(206,184,136);
		else if (colorName == "aqua_modern") cA = newArray(75,172,198); /* #4bacc6 AKA "Viking" aqua */
		else if (colorName == "blue_accent_modern") cA = newArray(79,129,189); /* #4f81bd */
		else if (colorName == "blue_dark_modern") cA = newArray(31,73,125);
		else if (colorName == "blue_modern") cA = newArray(58,93,174); /* #3a5dae */
		else if (colorName == "gray_modern") cA = newArray(83,86,90);
		else if (colorName == "green_dark_modern") cA = newArray(121,133,65);
		else if (colorName == "green_modern") cA = newArray(155,187,89); /* #9bbb59 AKA "Chelsea Cucumber" */
		else if (colorName == "green_modern_accent") cA = newArray(214,228,187); /* #D6E4BB AKA "Gin" */
		else if (colorName == "green_spring_accent") cA = newArray(0,255,102); /* #00FF66 AKA "Spring Green" */
		else if (colorName == "orange_modern") cA = newArray(247,150,70);
		else if (colorName == "pink_modern") cA = newArray(255,105,180);
		else if (colorName == "purple_modern") cA = newArray(128,100,162);
		else if (colorName == "jazzberry_jam") cA = newArray(165,11,94);
		else if (colorName == "red_N_modern") cA = newArray(227,24,55);
		else if (colorName == "red_modern") cA = newArray(192,80,77);
		else if (colorName == "tan_modern") cA = newArray(238,236,225);
		else if (colorName == "violet_modern") cA = newArray(76,65,132);
		else if (colorName == "yellow_modern") cA = newArray(247,238,69);
		/* Fluorescent Colors https://www.w3schools.com/colors/colors_crayola.asp */
		else if (colorName == "Radical Red") cA = newArray(255,53,94);			/* #FF355E */
		else if (colorName == "Wild Watermelon") cA = newArray(253,91,120);		/* #FD5B78 */
		else if (colorName == "Outrageous Orange") cA = newArray(255,96,55);	/* #FF6037 */
		else if (colorName == "Supernova Orange") cA = newArray(255,191,63);	/* FFBF3F Supernova Neon Orange*/
		else if (colorName == "Atomic Tangerine") cA = newArray(255,153,102);	/* #FF9966 */
		else if (colorName == "Neon Carrot") cA = newArray(255,153,51);			/* #FF9933 */
		else if (colorName == "Sunglow") cA = newArray(255,204,51); 			/* #FFCC33 */
		else if (colorName == "Laser Lemon") cA = newArray(255,255,102); 		/* #FFFF66 "Unmellow Yellow" */
		else if (colorName == "Electric Lime") cA = newArray(204,255,0); 		/* #CCFF00 */
		else if (colorName == "Screamin' Green") cA = newArray(102,255,102); 	/* #66FF66 */
		else if (colorName == "Magic Mint") cA = newArray(170,240,209); 		/* #AAF0D1 */
		else if (colorName == "Blizzard Blue") cA = newArray(80,191,230); 		/* #50BFE6 Malibu */
		else if (colorName == "Dodger Blue") cA = newArray(9,159,255);			/* #099FFF Dodger Neon Blue */
		else if (colorName == "Shocking Pink") cA = newArray(255,110,255);		/* #FF6EFF Ultra Pink */
		else if (colorName == "Razzle Dazzle Rose") cA = newArray(238,52,210); 	/* #EE34D2 */
		else if (colorName == "Hot Magenta") cA = newArray(255,0,204);			/* #FF00CC AKA Purple Pizzazz */
		else restoreExit("No color match to " + colorName);
		return cA;
	}
	function getHexColorFromRGBArray(colorNameString) {
		colorArray = getColorArrayFromColorName(colorNameString);
		 r = toHex(colorArray[0]); g = toHex(colorArray[1]); b = toHex(colorArray[2]);
		 hexName= "#" + ""+pad(r) + ""+pad(g) + ""+pad(b);
		 return hexName;
	}
	function restoreExit(message){ /* Make a clean exit from a macro, restoring previous settings */
		restoreSettings(); /* Restore previous settings before exiting */
		setBatchMode("exit & display"); /* Probably not necessary if exiting gracefully but otherwise harmless */
		exit(message);
	}
	function setColorFromColorName(colorName) {
		colorArray = getColorArrayFromColorName(colorName);
		setColor(colorArray[0], colorArray[1], colorArray[2]);
	}
	function setBackgroundFromColorName(colorName) {
		colorArray = getColorArrayFromColorName(colorName);
		setBackgroundColor(colorArray[0], colorArray[1], colorArray[2]);
	}
	function pad(n) {
		n= toString(n); if (lengthOf(n)==1) n= "0"+n; return n;
	}
	function unCleanLabel(string) { 
	/* v161104 This function replaces special characters with standard characters for file system compatible filenames */
	/* mod 041117 to remove spaces as well */
		string= replace(string, fromCharCode(178), "\\^2"); /* superscript 2 */
		string= replace(string, fromCharCode(179), "\\^3"); /* superscript 3 UTF-16 (decimal) */
		string= replace(string, fromCharCode(0x207B) + fromCharCode(185), "\\^-1"); /* superscript -1 */
		string= replace(string, fromCharCode(0x207B) + fromCharCode(178), "\\^-2"); /* superscript -2 */
		string= replace(string, fromCharCode(181), "u"); /* micron units */
		string= replace(string, fromCharCode(197), "Angstrom"); /* Ångström unit symbol */
		string= replace(string, fromCharCode(0x2009) + fromCharCode(0x00B0), "deg"); /* replace thin spaces deg */
		string= replace(string, fromCharCode(0x2009), "_"); /* Replace thin spaces  */
		string= replace(string, " ", "_"); /* Replace spaces - these can be a problem with image combination */
		string= replace(string, "_\\+", "\\+"); /* Clean up autofilenames */
		string= replace(string, "\\+\\+", "\\+"); /* Clean up autofilenames */
		string= replace(string, "__", "_"); /* Clean up autofilenames */
		return string;
	}
	function writeLabel_CFXY(label,labelColor,labelFontName, labelFontSize,labelX,labelY){
		setFont(labelFontName, labelFontSize, "antialiased");
		setColorFromColorName(labelColor);
		drawString(label, labelX, labelY); 
	}																									